CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Blue_dapi
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Blue_dapi
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:Gray_dapi
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
RescaleIntensity:[module_num:6|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
    Select the input image:Gray_dapi
    Name the output image:RescaleDapi
    Rescaling method:Divide by the image's maximum
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
Smooth:[module_num:7|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
    Select the input image:RescaleDapi
    Name the output image:SmoothDapi
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:SmoothDapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:7
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.9
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.2,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.01
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.5
    Thresholding method:Robust Background

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:SegmentedNuclei
    Select the color format:Binary (black & white)
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Users/oha-eun/Desktop/Senior Design/FREEDMAN LAB
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Threshold_GuideThreshold_Nuclei,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_FinalThreshold_Nuclei,Image|Count_Nuclei,Nuclei|AreaShape_Eccentricity,Nuclei|AreaShape_Area,Nuclei|AreaShape_BoundingBoxMinimum_X,Nuclei|AreaShape_BoundingBoxMinimum_Y,Nuclei|AreaShape_Center_Y,Nuclei|AreaShape_Center_X,Nuclei|AreaShape_Perimeter,Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_MinorAxisLength,Nuclei|AreaShape_MaxFeretDiameter,Nuclei|AreaShape_MeanRadius,Nuclei|AreaShape_Orientation,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Blue_Segmented_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:SegmentedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue_dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_blue_Segmented
    Saved file format:tiff
    Output file location:Elsewhere...|/Users/oha-eun/Desktop/Senior Design/FREEDMAN LAB/Post Processing Images/Max Projection
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
