CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DAPI
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:DAPI
    Name the output image:Suppressed
    Select the operation:Suppress
    Feature size:10
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Suppressed
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabels
    Select the color format:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabels
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiLabels
    Saved file format:tiff
    Output file location:Elsewhere...|/Users/oha-eun/Desktop/Senior Design/FREEDMAN LAB/Post Processing Images/Max Projection
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
